PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = GoFitts
  keyboardBackend = ioHub
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Routines
  Routine init
    TextComponent text
      color = black
      letterHeight = 40
      pos = (-300, 0)
      startVal [time (s)] = 0.0
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      text:
        歡迎參加慣用手動作協調作業，本實驗一共有9個段落

        本實驗希望您盡快移動滑鼠至紫色圓圈，請做的又快又正確

        若無問題請按下Enter鍵開始
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        if (current_target == 0) {
            psychoJS.experiment.addData('from', [...mouse.getPos()]);
            // can't reset mouse position!
        } else {
            let from_t = targets[target_order[current_target - 1]];
            psychoJS.experiment.addData('from', [...from_t.pos]);
        }

        let to_t = targets[target_order[current_target]];
        psychoJS.experiment.addData('to', [...to_t.pos]);
        psychoJS.experiment.addData('w', target_w);
        psychoJS.experiment.addData('a', target_a);

        psychoJS.experiment.addData('sequence_loop.thisN', sequence_loop.thisN);
      Begin Routine:
        if current_target == 0:
            thisExp.addData('from', [0, 0])
            # reset mouse position
            mouse.setPos([0, 0])
        else:
            from_t = targets[target_order[current_target - 1]]
            thisExp.addData('from', [*from_t.pos])

        to_t = targets[target_order[current_target]]
        thisExp.addData('to', [*to_t.pos])
        thisExp.addData('w', target_w)
        thisExp.addData('a', target_a)
      Each Frame:
        if current_target != target_c:
            for idx in range(len(targets)):
                target = targets[idx]
                if idx == target_order[current_target]:
                    target.fillColor = HIGHLIGHT_COLOR
                else:
                    target.fillColor = NORMAL_COLOR
                target.draw()

            if mouse.mouseMoved():
                x, y = mouse.getPos()
                if is_in_target(x, y):
                    continueRoutine = False
      Each JS Frame:
        if (current_target != target_c) {
            for (var idx, _pj_c = 0, _pj_a = util.range(targets.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                idx = _pj_a[_pj_c];
                let target = targets[idx];
                if ((idx === target_order[current_target])) {
                    target.fillColor = HIGHLIGHT_COLOR;
                } else {
                    target.fillColor = NORMAL_COLOR;
                }
                target.draw();
            }
            if (mouse.mouseMoved()) {
                let [x, y] = mouse.getPos();
                if (is_in_target(x, y)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        if (current_target + 1 == target_c) {
            for (let target of targets) {
                target.hide();
            }
        }
        current_target += 1;
      End Routine:
        current_target += 1
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sequence_start
    CodeComponent code_2
      Code Type = Both
      Before Experiment:
        HIGHLIGHT_COLOR = "#CCCCFF"
        NORMAL_COLOR = "#FFFFFF"
        LINE_COLOR = "#6A6A6A"

        target_c = 15
        parameters = [(100, 80), (170, 77.8), (250, 71.5), (325, 60.5), (400, 48), (475, 40.5), (550, 32.3), (625, 25.5), (700, 20)]

        shuffle(parameters)
        n_seqs = len(parameters)
        n_trials = target_c

        targets = []
        target_order = []
        current_target = 0

        target_w = 0
        target_a = 0

        def is_in_target(x, y):
            if current_target == target_c: return False
            tx, ty = targets[target_order[current_target]].pos
            return (x - tx) ** 2 + (y - ty) ** 2 <= (target_w // 2) ** 2
      Before JS Experiment:
        // Experiment Settings
        const HIGHLIGHT_COLOR = "#CCCCFF";
        const NORMAL_COLOR = "#FFFFFF";
        const LINE_COLOR = "#6A6A6A";

        const target_c = 15;
        const parameters = [[100, 80], [170, 77.8], [250, 71.5], [325, 60.5], [400, 48], [475, 40.5], [550, 32.3], [625, 25.5], [700, 20]];

        for (var a, _pj_c = 0, _pj_a = param_a, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            a = _pj_a[_pj_c];
            for (var w, _pj_f = 0, _pj_d = param_w, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                w = _pj_d[_pj_f];
                parameters.push([a, w]);
            }
        }
        util.shuffle(parameters);
        const n_seqs = parameters.length;
        const n_trials = target_c;

        // variables that needs to be referenced else where
        var targets = [];
        var target_order = [];
        var current_target = 0;

        var target_w = 0
        var target_a = 0

        function is_in_target(x, y) {
            if (current_target == target_c) return false;
            var tx, ty;
            [tx, ty] = targets[target_order[current_target]].pos;
            return ((Math.pow((x - tx), 2) + Math.pow((y - ty), 2)) <= Math.pow(target_w / 2, 2));
        }
      Begin JS Routine:
        mouse.getPos();
        [target_a, target_w] = parameters.pop();

        // Re-initalization
        targets = [];
        current_target = 0;
        target_order = [];

        // Add circle
        for (var i, _pj_c = 0, _pj_a = util.range(target_c), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            let x = ((target_a / 2) * Math.cos(((2.0 * pi) * (i / target_c))));
            let y = ((target_a / 2) * Math.sin(((2.0 * pi) * (i / target_c))));
            let target = new visual.Polygon({"win": psychoJS.window, "size": target_w, "pos": [x, y], "fillColor": "white", "lineWidth": 2, "lineColor": LINE_COLOR, "edges": 100});
            targets.push(target);
        }

        // Filling target order
        let start = util.randint(0, (target_c - 1));
        const interval = Number.parseInt(((target_c + 1) / 2));
        let idx = 0;
        while ((idx < target_c)) {
            target_order.push((start % target_c));
            idx += 1;
            if ((idx < target_c)) {
                target_order.push(((start + interval) % target_c));
                idx += 1;
            }
            start += 1;
        }

        console.log(target_order);
      Begin Routine:
        mouse.getPos() # this is needed here because of mouse.mouseMoved()
        target_a, target_w = parameters.pop()

        targets = []
        current_target = 0
        target_order = []

        for i in range(target_c):
            x = target_a / 2 * cos(2.0 * pi * (i / target_c))
            y = target_a / 2 * sin(2.0 * pi * (i / target_c))
            target = visual.Circle(win=win,
                                   size=target_w,
                                   pos=(x,y),
                                   fillColor="white",
                                   lineWidth=2,
                                   lineColor=LINE_COLOR)
            targets.append(target)

        start = randint(0, target_c - 1)
        interval = int((target_c + 1) / 2)
        idx = 0
        while idx < target_c:
            target_order.append(start % target_c)
            idx += 1
            if idx < target_c:
                target_order.append((start + interval) % target_c)
                idx += 1
            start += 1

        print(target_order)
    TextComponent text_2
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
      text = 按下Enter鍵開始
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine init
  LoopInitiator sequence_loop loopType="TrialHandler"
    loopType = sequential
    nReps = n_seqs
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    Routine sequence_start
    LoopInitiator trial_loop loopType="TrialHandler"
      loopType = sequential
      nReps = n_trials
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      Routine trial
    LoopTerminator trial_loop
  LoopTerminator sequence_loop
